CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. A metadata format for a 384-well plate metadata format is used here. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<dye>[0-9])(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})F(?P<Field>[0-9]{1,4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Bone marrow derived macrophages from Mito-QC mice which express GFP and mCherry dual tagged FIS1 on the outer mitochondrial membrane.', 'DAPI (DNA dye)', 'GFP (FIS1)', 'mCherry (FIS1)', 'SDHB (immunostain)']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'PlateID', u'GFP': u'PlateID', u'SDHB': u'PlateID', u'mcherry': u'PlateID'}, {u'DAPI': u'WellID', u'GFP': u'WellID', u'SDHB': u'WellID', u'mcherry': u'WellID'}, {u'DAPI': u'Field', u'GFP': u'Field', u'SDHB': u'Field', u'mcherry': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does startwith "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does startwith "C2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does startwith "C3")
    Name to assign these images:mcherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C4")
    Name to assign these images:SDHB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Thresholding and segmentation of DAPI signal to define nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPIobjects
    Typical diameter of objects, in pixel units (Min,Max):40,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:10
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0001,1.0
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
SplitOrMergeObjects:[module_num:6|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notes:['In case nuclei are segmented into multiple objects (based on local intensity minima), objects are merged to correctly segment total nuclei.']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
    Select the input objects:DAPIobjects
    Name the new objects:Nuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifySecondaryObjects:[module_num:7|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notes:['Cell area defined by low stringency threshold of the GFP signal.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:8
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.005,1.0
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
MaskImage:[module_num:8|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notes:['The anti-SDHB antibody used in this experiment (10620-1-AP) has nonspecific background staining in the nucleus. Thus, subtraction of nuclear signal from all of the channels enhances the specificity of colocalization and intensity analysis specifically as relate to mitochondrial/cytosolic localization.', '']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
    Select the input image:SDHB
    Name the output image:NucsubtractedSDHB
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:9|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notes:['The anti-SDHB antibody used in this experiment (10620-1-AP) has nonspecific background staining in the nucleus. Thus, subtraction of nuclear signal from all of the channels enhances the specificity of colocalization and intensity analysis specifically as relate to mitochondrial/cytosolic localization.', '']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
    Select the input image:GFP
    Name the output image:NucsubtractedGFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:10|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notes:['The anti-SDHB antibody used in this experiment (10620-1-AP) has nonspecific background staining in the nucleus. Thus, subtraction of nuclear signal from all of the channels enhances the specificity of colocalization and intensity analysis specifically as relate to mitochondrial/cytosolic localization.', '']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
    Select the input image:mcherry
    Name the output image:Nucsubtractedmcherry
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MeasureColocalization:[module_num:11|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notes:["Measure colocalization between SDHB, GFP, and mCherry. Specifically, Mander's coefficient was used for analysis in this study. This was performed on the nuclear masked images."]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
    Hidden:3
    Hidden:1
    Select an image to measure:NucsubtractedSDHB
    Select an image to measure:NucsubtractedGFP
    Select an image to measure:Nucsubtractedmcherry
    Set threshold as percentage of maximum intensity for the images:30
    Select where to measure correlation:Within objects
    Select an object to measure:Cell
    Run all metrics?:Yes
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
MeasureObjectIntensity:[module_num:12|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notes:['Measure intensity of the SDHB immunostain, GFP, and mCherry. This was performed on the nuclear masked images.']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
    Hidden:3
    Select an image to measure:NucsubtractedGFP
    Select an image to measure:Nucsubtractedmcherry
    Select an image to measure:NucsubtractedSDHB
    Select objects to measure:Cell

RescaleIntensity:[module_num:13|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notes:['Rescale image intesnsity (post analysis) to aid in visualization of analysis overlay (outline)']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
    Select the input image:GFP
    Name the output image:RescaleGFP
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:14|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notes:['Generation of the analysis overlay (outline) to validate automated cellular segmentation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleGFP
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell

Tile:[module_num:15|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notes:['']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
    Select an input image:RescaleGFP
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:16|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Cell,Image|Count_Nuclei,Image|Count_DAPIobjects,Image|Width_DAPI,Image|Width_GFP,Image|Width_SDHB,Image|Width_mcherry,Image|ExecutionTime_16SaveImages,Image|ExecutionTime_09MaskImage,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_12MeasureObjectIntensity,Image|ExecutionTime_11MeasureColocalization,Image|ExecutionTime_08MaskImage,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06SplitOrMergeObjects,Image|ExecutionTime_14OverlayOutlines,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_13RescaleIntensity,Image|ExecutionTime_10MaskImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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