CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. A metadata format for a 384-well plate metadata format is used here. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<dye>[0-9])(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})f(?P<Field>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Hoechst is a DNA dye', 'MitoSOX is a mitochondrial superoxide dye']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Hoechst': u'PlateID', u'MitoSOX': u'PlateID'}, {u'Hoechst': u'WellID', u'MitoSOX': u'WellID'}, {u'Hoechst': u'Field', u'MitoSOX': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:MitoSOX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Thresholding and segmentation of Hoechst signal to define nuclei']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:5
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0005,1.0
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
IdentifySecondaryObjects:[module_num:6|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notes:['Low stringency thresholding of Hoechst signal to define cell area.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Hoechst
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:4
    Threshold correction factor:.45
    Lower and upper bounds on threshold:0.0001,1.0
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
MeasureObjectIntensity:[module_num:7|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notes:['Measure MitoSOX within each cell']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
    Hidden:1
    Select an image to measure:MitoSOX
    Select objects to measure:Cell

RescaleIntensity:[module_num:8|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notes:['Rescale image intensity (post-analysis) to visualize cell segmentation']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
    Select the input image:MitoSOX
    Name the output image:RescaleMitoSOX
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:9|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notes:['Overlays cell objects over MitoSOX image to validate proper automated cell segmentation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleMitoSOX
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell

Tile:[module_num:10|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notes:['']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
    Select an input image:RescaleMitoSOX
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:11|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell|Intensity_MassDisplacement_MitoSOX,Cell|Intensity_MinIntensity_MitoSOX,Cell|Intensity_IntegratedIntensityEdge_MitoSOX,Cell|Intensity_StdIntensity_MitoSOX,Cell|Intensity_MinIntensityEdge_MitoSOX,Cell|Intensity_IntegratedIntensity_MitoSOX,Cell|Intensity_UpperQuartileIntensity_MitoSOX,Cell|Intensity_MADIntensity_MitoSOX,Cell|Intensity_LowerQuartileIntensity_MitoSOX,Cell|Intensity_MeanIntensityEdge_MitoSOX,Cell|Intensity_MaxIntensity_MitoSOX,Cell|Intensity_MedianIntensity_MitoSOX,Cell|Intensity_MeanIntensity_MitoSOX,Cell|Intensity_StdIntensityEdge_MitoSOX,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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