CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. A metadata format for a 384-well plate metadata format is used here. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<dye>[0-9])(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})F(?P<Field>[0-9]{1,3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. ', 'DAPI is a DNA dye', 'SLP2GFP is Stomatin-like protein 2 tagged to GFP', 'TOM20 is a TOM20 immunostain', 'SDHB is a SDHB immunostain', '']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'PlateID', u'SDHB': u'PlateID', u'TOM20': u'PlateID', u'SLP2GFP': u'PlateID'}, {u'DAPI': u'WellID', u'SDHB': u'WellID', u'TOM20': u'WellID', u'SLP2GFP': u'WellID'}, {u'DAPI': u'Field', u'SDHB': u'Field', u'TOM20': u'Field', u'SLP2GFP': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:SLP2GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:TOM20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:SDHB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Because cells are manually identified in the next module, images are rescaled to allow visualization in CellProfiler software. Rescaled images are not used for analysis.']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
    Select the input image:SLP2GFP
    Name the output image:RescaleSLP2GFPforsegmentation
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0,.1
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
IdentifyObjectsManually:[module_num:6|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notes:['Cell area is user defined and roughly outlines SLP2-GFP positive cells.']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
    Select the input image:RescaleSLP2GFPforsegmentation
    Name the objects to be identified:Cells

IdentifyPrimaryObjects:[module_num:7|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notes:['Mitochondria are identified based on TOM20 stain.']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
    Select the input image:TOM20
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:8|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notes:['Mitochondria which are contiguous are merged to identify the mitochondrial network.']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
    Select the input objects:Mitochondria
    Name the new objects:MitoMerged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Puncta in the SLP2-GFP channel are identified.']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
    Select the input image:SLP2GFP
    Name the primary objects to be identified:SLP2puncta
    Typical diameter of objects, in pixel units (Min,Max):3,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:.12,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:10|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notes:['SLP2-GFP puncta which are contiguous are merged to correct for oversegmentation of puncta (e.g. 1 punctum segmented into multiple based on local intensity minima)']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
    Select the input objects:SLP2puncta
    Name the new objects:SLP2puncta_merged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Puncta in the SDHB channel are identified.']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
    Select the input image:SDHB
    Name the primary objects to be identified:SDHBpuncta
    Typical diameter of objects, in pixel units (Min,Max):3,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:.092,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:12|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notes:['SDHB puncta which are contiguous are merged to correct for oversegmentation of puncta (e.g. 1 punctum segmented into multiple based on local intensity minima)']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
    Select the input objects:SDHBpuncta
    Name the new objects:SDHBpuncta_merged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:13|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notes:['SLP2-GFP and SDHB double-positive puncta are identified.']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
    Parent objects:SLP2puncta_merged
    Child objects:SDHBpuncta_merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2SDHB
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
RelateObjects:[module_num:14|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notes:['SDHB puncta which overlap with mitochondria are identified']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
    Parent objects:MitoMerged
    Child objects:SDHBpuncta_merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SDHBpuncta_mito
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
RelateObjects:[module_num:15|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notes:['SLP2-GFP puncta which overlap with mitochondria are identified']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
    Parent objects:MitoMerged
    Child objects:SLP2puncta_merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2puncta_mito
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
RelateObjects:[module_num:16|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notes:['SLP2-GFP and SDHB double positive puncta which overlap with mitochondria are identified']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
    Parent objects:MitoMerged
    Child objects:SLP2SDHB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2SDHBpuncta_mito
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
FilterObjects:[module_num:17|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notes:['Identify non-mitochondrial (no TOM20 overlap) SDHB puncta']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
    Select the objects to filter:SDHBpuncta_merged
    Name the output objects:SDHB_nonmito
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_MitoMerged
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

FilterObjects:[module_num:18|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notes:['Identify non-mitochondrial (no TOM20 overlap) SLP2-GFP puncta']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
    Select the objects to filter:SLP2puncta_merged
    Name the output objects:SLP2_nonmito
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_MitoMerged
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

FilterObjects:[module_num:19|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notes:['Identify non-mitochondrial (no TOM20 overlap) SDHB adn SLP2-GFP double positive puncta']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
    Select the objects to filter:SLP2SDHB
    Name the output objects:SLP2SDHB_nonmito
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_MitoMerged
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

RelateObjects:[module_num:20|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notes:['Measure the number of SDHB puncta per cell']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
    Parent objects:Cells
    Child objects:SDHBpuncta_merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SDHBpuncta_Cell
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
RelateObjects:[module_num:21|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notes:['Measure the number of SLP2-GFP puncta per cell']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
    Parent objects:Cells
    Child objects:SLP2puncta_merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2puncta_cell
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
RelateObjects:[module_num:22|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notes:['Measure the number of SDHB and SLP2-GFP double positive puncta per cell']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
    Parent objects:Cells
    Child objects:SLP2SDHB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Doublepuncta_cell
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
RelateObjects:[module_num:23|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notes:['Measure the number of non-mitochondrial (no TOM20 overlap) SDHB puncta per cell']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
    Parent objects:Cells
    Child objects:SDHB_nonmito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SDHBnonmito_Cell
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
RelateObjects:[module_num:24|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notes:['Measure the number of non-mitochondrial (no TOM20 overlap) SLP2-GFP puncta per cell']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
    Parent objects:Cells
    Child objects:SLP2_nonmito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2nonmito_Cell
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
RelateObjects:[module_num:25|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notes:['Measure the number of non-mitochondrial (no TOM20 overlap) SDHB and SLP2-GFP double positive puncta per cell']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
    Parent objects:Cells
    Child objects:SLP2SDHB_nonmito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SLP2SDHBnonmito_Cell
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
MeasureColocalization:[module_num:26|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
    Hidden:3
    Hidden:1
    Select an image to measure:SDHB
    Select an image to measure:SLP2GFP
    Select an image to measure:TOM20
    Set threshold as percentage of maximum intensity for the images:30
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Run all metrics?:Yes
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
RescaleIntensity:[module_num:27|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notes:['Rescale image intensity (post-analysis) to visualize object segmetation (for overlaying cell area and puncta analysis)']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
    Select the input image:SLP2GFP
    Name the output image:RescaleSLP2GFP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:28|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notes:['cale image intensity (post-analysis) to visualize object segmetation (for overlaying cell area and puncta analysis)']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
    Select the input image:SDHB
    Name the output image:RescaleSDHB
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleSLP2GFP
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8AE3FD
    Select objects to display:Cells
    Select outline color:#FE9EA0
    Select objects to display:Doublepuncta_cell

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleSDHB
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8AE3FD
    Select objects to display:Cells
    Select outline color:#FE9EA0
    Select objects to display:Doublepuncta_cell

Tile:[module_num:31|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notes:['Generates tiled image ']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
    Select an input image:RescaleSLP2GFP
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:RescaleSDHB
    Select an additional image to tile:OrigOverlay1
    Select an additional image to tile:OrigOverlay2

SaveImages:[module_num:32|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SLP2puncta_merged|Parent_Cells,SLP2puncta_merged|Parent_MitoMerged,SLP2puncta_merged|Parent_SLP2puncta,SLP2puncta_merged|Number_Object_Number,SLP2puncta_merged|Location_Center_Y,SLP2puncta_merged|Location_Center_X,SLP2puncta_merged|Children_SLP2puncta_cell_Count,SLP2puncta_merged|Children_SLP2puncta_mito_Count,SLP2puncta_merged|Children_SLP2_nonmito_Count,SLP2puncta_merged|Children_SDHBpuncta_merged_Count,SLP2puncta_merged|Mean_SDHBpuncta_merged_Number_Object_Number,SLP2puncta_merged|Mean_SDHBpuncta_merged_Location_Center_Y,SLP2puncta_merged|Mean_SDHBpuncta_merged_Location_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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