CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. A metadata format for a 384-well plate metadata format is used here. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<dye>[0-9])(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})F(?P<Field>[0-9]{1,4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'SDHB is a SDHB immunostain', 'Complex I is an MT-ND1 immunostain', 'DAPI is a DNA dye']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'PlateID', u'SDHB': u'PlateID', u'ComplexI': u'PlateID'}, {u'DAPI': u'WellID', u'SDHB': u'WellID', u'ComplexI': u'WellID'}, {u'DAPI': u'Field', u'SDHB': u'Field', u'ComplexI': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "C3")
    Name to assign these images:SDHB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C1")
    Name to assign these images:ComplexI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Thresholding and segmentation of DAPI signal to define nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPIobjects
    Typical diameter of objects, in pixel units (Min,Max):40,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:30
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.05,1.0
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
SplitOrMergeObjects:[module_num:6|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notes:['In the event nuclei are split into multiple contiguous objects during segmentation (based on local intensity minima), these objects merged to generate to correct nuclear segmentation.']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
    Select the input objects:DAPIobjects
    Name the new objects:Nuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Step 1 of background subtraction to enhance SDHB puncta segmentation']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
    Select the input image:SDHB
    Name the output image:IllumSDH
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Step 2 of background subtraction to enhance SDHB puncta segmentation']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
    Select the input image:SDHB
    Name the output image:CorrSDH
    Select the illumination function:IllumSDH
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:9|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notes:['Enhancement of punctate features based on the rough observed size of SDHB puncta.']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
    Select the input image:CorrSDH
    Name the output image:EnhancedSDH
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:10|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notes:['Identification of SDHB puncta']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
    Select the input image:EnhancedSDH
    Name the primary objects to be identified:SDHpuncta
    Typical diameter of objects, in pixel units (Min,Max):2,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:.55,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:11|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notes:['Identification of cell area based on low stringency thresholding of Complex I immunostain. Alternatively, a generic cell stain can be used e.g. Cell Tracker, Cell Mask, or Phalloidin.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:ComplexI
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:5
    Threshold correction factor:.6
    Lower and upper bounds on threshold:0.01,1.0
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
SplitOrMergeObjects:[module_num:12|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notes:['In the event SDHB puncta are split into multiple contiguous objects during segmentation (based on local intensity minima), these objects merged to generate to correct SDHB segmentation.']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
    Select the input objects:SDHpuncta
    Name the new objects:MergedSDHpuncta
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:13|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notes:['Relate SDHB puncta measurements to parent cells']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
    Parent objects:Cell
    Child objects:MergedSDHpuncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SDHpuncta_cell
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
RescaleIntensity:[module_num:14|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notes:['Rescale image intensity (post-analysis) to visualize object segmetation (for overlaying cell, nuclear, or mitochondrial objects)']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
    Select the input image:SDHB
    Name the output image:RescaleSDH
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:15|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleSDH
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell
    Select outline color:#F58189
    Select objects to display:SDHpuncta_cell

Tile:[module_num:16|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notes:['']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
    Select an input image:RescaleSDH
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:17|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MergedSDHpuncta|Children_SDHpuncta_cell_Count,MergedSDHpuncta|Number_Object_Number,MergedSDHpuncta|Location_Center_Y,MergedSDHpuncta|Location_Center_X,MergedSDHpuncta|Parent_Cell,MergedSDHpuncta|Parent_SDHpuncta,Image|Count_MergedSDHpuncta,Image|Count_Cell,Image|Count_SDHpuncta,Image|Count_SDHpuncta_cell,Image|Count_Nuclei,Image|Count_DAPIobjects,Image|Width_DAPI,Image|Width_SDHB,Image|Width_ComplexI,Image|ExecutionTime_07CorrectIlluminationCalculate,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_08CorrectIlluminationApply,Image|ExecutionTime_14RescaleIntensity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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